
###############################################################################
#
#  Simple slab simulation to test various materials for electron production and
#  scatter when irradiated with photon beam.
#
###############################################################################


# Run control setup
:start run control:
    ncase = 80000
:stop run control:


# Geometry setup
:start geometry definition:

    # Test plates geometry and material definition

    # Tantalum plate
    :start geometry:
        name = lab
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -28.0, -23.0, -13.0, -11.0, -1.0, 1.0, 11.0, 13.0, 23.0, 28.0 # in cm
        y-planes = -16.0, -11.0, -1.0, 1.0, 11.0, 16.0 # in cm
        z-planes =  -10.0, 0.0, 0.1, 20.0 # in cm
        :start media input:
            media = vacuum TA521ICRU PB521ICRU AL521ICRU CU521ICRU YELBRASS521ICRU STEEL521ICRU ZN521ICRU TI521ICRU
            set medium = 55 1
            set medium = 57 2
            set medium = 59 3
            set medium = 61 4
            set medium = 73 5
            set medium = 75 6
            set medium = 77 7
            set medium = 79 8
        :stop media input:
    :stop geometry:

    # Set simulation geometry
    simulation geometry = lab
:stop geometry definition:


# Media definition


# Particle sources definition
:start source definition:

    # Define individual sources

    :start source:
        name = s1
        library = egs_parallel_beam
        charge = 0
        direction = 0 0 1
        :start spectrum:
            type = monoenergetic
            energy = 6.0 # in MeV
        :stop spectrum:
        :start shape:
            type = point
            position = -18.0 -6.0 -10.0
        :stop shape:
    :stop source:

    :start source:
        name = s2
        library = egs_parallel_beam
        charge = 0
        direction = 0 0 1
        :start spectrum:
            type = monoenergetic
            energy = 6.0 # in MeV
        :stop spectrum:
        :start shape:
            type = point
            position = -6.0 -6.0 -10.0
        :stop shape:
    :stop source:

    :start source:
        name = s3
        library = egs_parallel_beam
        charge = 0
        direction = 0 0 1
        :start spectrum:
            type = monoenergetic
            energy = 6.0 # in MeV
        :stop spectrum:
        :start shape:
            type = point
            position = 6.0 -6.0 -10.0
        :stop shape:
    :stop source:

    :start source:
        name = s4
        library = egs_parallel_beam
        charge = 0
        direction = 0 0 1
        :start spectrum:
            type = monoenergetic
            energy = 6.0 # in MeV
        :stop spectrum:
        :start shape:
            type = point
            position = 18.0 -6.0 -10.0
        :stop shape:
    :stop source:

    :start source:
        name = s5
        library = egs_parallel_beam
        charge = 0
        direction = 0 0 1
        :start spectrum:
            type = monoenergetic
            energy = 6.0 # in MeV
        :stop spectrum:
        :start shape:
            type = point
            position = -18.0 6.0 -10.0
        :stop shape:
    :stop source:

    :start source:
        name = s6
        library = egs_parallel_beam
        charge = 0
        direction = 0 0 1
        :start spectrum:
            type = monoenergetic
            energy = 6.0 # in MeV
        :stop spectrum:
        :start shape:
            type = point
            position = -6.0 6.0 -10.0
        :stop shape:
    :stop source:

    :start source:
        name = s7
        library = egs_parallel_beam
        charge = 0
        direction = 0 0 1
        :start spectrum:
            type = monoenergetic
            energy = 6.0 # in MeV
        :stop spectrum:
        :start shape:
            type = point
            position = 6.0 6.0 -10.0
        :stop shape:
    :stop source:

    :start source:
        name = s8
        library = egs_parallel_beam
        charge = 0
        direction = 0 0 1
        :start spectrum:
            type = monoenergetic
            energy = 6.0 # in MeV
        :stop spectrum:
        :start shape:
            type = point
            position = 18.0 6.0 -10.0
        :stop shape:
    :stop source:

    :start source:
        name = the_source
        library = egs_source_collection
        source names = s1 s2 s3 s4 s5 s6 s7 s8
        weights = 1.0 1.0 1.0 1.0 1.0 1.0 1.0 1.0
    :stop source:

    # Set simulation source
    simulation source = the_source

:stop source definition:


# Transport parameters setup
:start MC transport parameter:

    Global ECUT= 0.521
    Global PCUT= 0.01
    Global SMAX= 0
    ESTEPE= 0.25
    XIMAX= 0.5
    Boundary crossing algorithm= PRESTA-I
    Skin depth for BCA= 0
    Electron-step algorithm= PRESTA-II
    Spin effects= On
    Brems angular sampling= Simple
    Brems cross sections= BH
    Bound Compton scattering= Off
    Compton cross sections= default
    Pair angular sampling= Simple
    Pair cross sections= BH
    Photoelectron angular sampling= Off
    Rayleigh scattering= Off
    Atomic relaxations= Off
    Electron impact ionization= Off
    Photon cross sections= xcom
    Photon cross-sections output= Off

:stop MC transport parameter:


# Ausgab objects definition
:start ausgab object definition: # Only 1 ausgab definition block allowed

    # Particle tracks
    :start ausgab object:
        name = electron_tracks
        library = egs_track_scoring
        score photons = no
        score positrons = no
        stop scoring = 2048
        buffer size = 2048
    :stop ausgab object:

:stop ausgab object definition:


# Viewer setup
:start view control:
    # Here we are just assigning some colors for nice
    # display in the egs_view application
    set color = vacuum 0 0 0 0
    set color = TA521ICRU       110 110 110 255
    set color = PB521ICRU       220 220 220 255
    set color = AL521ICRU       240 240 240 255
    set color = CU521ICRU       184 115  51 255
    set color = YELBRASS521ICRU 181 166  66 255
    set color = STEEL521ICRU     67  70  75 255
    set color = ZN521ICRU       186 196 200 255
    set color = TI521ICRU       130 135 136 255
:stop view control:
