
###############################################################################
#
#  EGSnrc egs++ template cylindrical water phantom for PDD scoring.
#
#  Author: Ljubomir Kurij, 2019
#
#  Contributors:
#
###############################################################################
#
#  An template geometry input file for the egs++ geometry package.
#
###############################################################################


# Geometry definition
:start geometry definition:

    :start geometry:
        name        = pln_bnds
        library     = egs_planes
        type        = EGS_Zplanes
        # positions   = 0.0 1.0 2.0 3.0 4.0 5.0 6.0 7.0 8.0 9.0 10.0 11.0 12.0 13.0 14.0 15.0 16.0 17.0 18.0 19.0 20.0 21.0 22.0 23.0 24.0 25.0 26.0 27.0 28.0 29.0 30.0 31.0 32.0 33.0 34.0 35.0 36.0 37.0 38.0 39.0 40.0
        positions = 0.0 0.1 0.2 0.3 0.4 0.5 0.6 0.7 0.8 0.9 1.0 1.1 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40.0
    :stop geometry:

    :start geometry:
        name        = cyl_bnds
        library     = egs_cylinders
        type        = EGS_ZCylinders
        radii       = 0.05 30.0
        midpoint    = 0
        :start media input:
            media = AIR521ICRU H2O521ICRU
            set medium = 0 1 1
            #set medium = 1 1
        :stop media input:
    :stop geometry:

    :start geometry:
        name            = the_phantom
        library         = egs_cdgeometry
        base geometry   = pln_bnds
        # set geometry = 1 geom means:
        # "in region 1 of the basegeometry, use geometry "geom"
        # set geometry   = 0 40 cyl_bnds
        set geometry   = 0 400 cyl_bnds
        # The final region numbers are attributed by the cd geometry object;
        # Use the viewer to determine region numbers
    :stop geometry:

    simulation geometry = the_phantom

:stop geometry definition:


# Run control
:start run control:

    ncase = 5000000

:stop run control:


# Source definition
:start source definition:
    :start source:
        name = the_source
        library = egs_collimated_source
        charge = 0
        :start source shape:
            type = point
            position = 0 0 -100.0
        :stop source shape:
        :start target shape:
            library   = egs_rectangle
            rectangle = -0.3 -0.3 0.3 0.3
        :stop target shape:
        distance = 6.0
        :start spectrum:
            type = monoenergetic
            #energy = 1.25 # in MeV
            energy = 6.00 # in MeV
        :stop spectrum:
    :stop source:

    simulation source = the_source

:stop source definition:


# Transport parameters
:start MC transport parameter:

    Global ECUT = 0.521
    Global PCUT = 0.01
    Global SMAX = 0
    ESTEPE = 0.25
    XIMAX = 0.5
    Boundary crossing algorithm = PRESTA-I
    Skin depth for BCA = 0
    Electron-step algorithm = PRESTA-II
    Spin effects = On
    Brems angular sampling = Simple
    Brems cross sections = BH
    Bound Compton scattering = Off
    Compton cross sections = default
    Pair angular sampling = Simple
    Pair cross sections = BH
    Photoelectron angular sampling = Off
    Rayleigh scattering = Off
    Atomic relaxations = Off
    Electron impact ionization = Off
    Photon cross sections = xcom
    Photon cross-sections output = Off

    # Turn on magnetic field here
    #Magnetic Field = 0.0, 0.5, 0.0
    #EM ESTEPE = 0.02

:stop MC transport parameter:



# Ausgab object definition
:start ausgab object definition: # Only 1 ausgab definition block allowed

    # Dose scoring
    :start ausgab object:
        library = egs_dose_scoring
        name = pdd
        region dose = yes
        volume = 0.000785 # in cm**3
        # dose regions = 0 2 4 6 8 10 12 14 16 18 20 22 24 26 28 30 32 34 36 38 40 42 44 46 48 50 52 54 56 58 60 62 64 66 68 70 72 74 76 78
        dose regions = 0 2 4 6 8 10 12 14 16 18 20 22 24 26 28 30 32 34 36 38 40 42 44 46 48 50 52 54 56 58 60 62 64 66 68 70 72 74 76 78 80 82 84 86 88 90 92 94 96 98 100 102 104 106 108 110 112 114 116 118 120 122 124 126 128 130 132 134 136 138 140 142 144 146 148 150 152 154 156 158 160 162 164 166 168 170 172 174 176 178 180 182 184 186 188 190 192 194 196 198 200 202 204 206 208 210 212 214 216 218 220 222 224 226 228 230 232 234 236 238 240 242 244 246 248 250 252 254 256 258 260 262 264 266 268 270 272 274 276 278 280 282 284 286 288 290 292 294 296 298 300 302 304 306 308 310 312 314 316 318 320 322 324 326 328 330 332 334 336 338 340 342 344 346 348 350 352 354 356 358 360 362 364 366 368 370 372 374 376 378 380 382 384 386 388 390 392 394 396 398
    :stop ausgab object:

:stop ausgab object definition:


# Viewer setup
:start view control:

    # Here we are just assigning some colors for nice
    # display in the egs_view application
    set color = vacuum 0 0 0 0
    set color = AIR521ICRU        0 220 255  10
    ste color = H2O521ICRU        0 123 185 200
    set color = TA521ICRU       110 110 110 255
    set color = PB521ICRU       220 220 220 255
    set color = AL521ICRU       240 240 240 255
    set color = CU521ICRU       184 115  51 255
    set color = YELBRASS521ICRU 181 166  66 255
    set color = STEEL521ICRU     67  70  75 255
    set color = ZN521ICRU       186 196 200 255
    set color = TI521ICRU       130 135 136 255

:stop view control:
